graphs:

  - id: acquisition
    nodes:

    # Bitalino driver
    # ---------------
    - id: bitalino
      module: timeflux_bitalino.nodes.driver
      class: Bitalino
      params:
        port: /dev/rfcomm0
        rate: 1000
        sensors:
          A1: ECG

    # Select ECG channels
    # -------------------
    - id: select
      module: timeflux.nodes.query
      class: LocQuery
      params:
        key: [A1_ECG]

    # Publish 
    # -------
    - id: pub_raw
      module: timeflux.nodes.zmq
      class: Pub
      params:
        topic: raw

    edges:
     - source: bitalino
       target: select
     - source: select
       target: pub_raw 

    rate: 0
